OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Online Use
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  The stimulation part of the scenario is
  similar to scenario 1-acquisition.

  If you keep the Target Letter Generation
  box, you will be able to train the algorithms
  again on the recorded data.
Comment
  Switch from file reader
  to Acquisiton client to use it online
Comment
  Overview

  This scenario can be used online once the
  spatial filter and the classifiers are trained.
  The Target Letter Generation
  box still proposes some targets in order to
  eventually train the spatial filter / classifier
  again, but you may want to disconnect that box
  in order to have a real free time use of
  the speller.

  The flash sequence starts automatically after 20 sec.

  You will then be presented a blue letter that
  you have to focus on, followed by a 12 times
  flashing sequence of the whole grid. The detected
  letter will be presented in green. This will be repeated
  10 times.

  If the performance of the system does not fit your
  requirements, just run 2-train-xDAWN and 3-train-classifier
  scenarios again on the data you just recorded.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  You can configure the Flashing Sequence
  and the Target Letter Generation in order to
  instruct the subject to spell a specific word.

  Set the target word in the Lua Stimulator (e.g. "openvibe")
  and adapt the number of trials in the P300 Speller Stimulator
  (e.g. 8 trials for the 8 letters in "openvibe")

  Note: If the number of letter in the chosen word does not match
  the number of trial, you won't be able to train xDAWN and
  the classifier on the recorded data.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Simple DSP "Convert to uV" => #1
  Equation = x * 1000 *1000
Input Signal=#1, Input Stimulations=#0.Stimulations -> Generic stream writer
  Filename = ${save_file_raw}
  Use compression = false
Input stream 1=#0.Experiment information, Input stream 2=#1, Input stream 3=#0.Stimulations -> Identity => #3
#3.Output stream 2 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 20
-> Signal Decimation
  Decimation factor = 4
-> xDAWN Spatial Filter => #6
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${xdawn_config_file}
Signal=#6, Stimulations=#3.Output stream 3 -> Cumulative Row Sel Python => #7
  NumFlashes = ${num_flash}
  ConfigFile = ${class_config_file}
  NumChannels = 3
Signal=#6, Stimulations=#3.Output stream 3 -> Cumulative Col Sel Python => #8
  NumFlashes = ${num_flash}
  ConfigFile = ${class_config_file}
  NumChannels = 3
#3.Output stream 3 -> Identity => #9
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Launch
  Lua Script = $Environment{OV_PATH_CONFIG}/p300-speller-launch.lua
  Stimulation to send = OVTK_StimulationId_Label_00
  Time to send = 5
-> P300 Speller Stimulator => #12
  Start stimulation = OVTK_StimulationId_Label_00
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Number of rows = 6
  Number of columns = 6
  Number of repetitions = ${num_flash}
  Number of trials = ${num_letters}
  Flash duration (in sec) = 0.05500000
  No flash duration (in sec) = 0.11700000
  Inter-repetition delay (in sec) = 0.00000
  Inter-trial delay (in sec) = 6.000000
  Avoid neighbor flashing = false
-> Target Letter Generation => #13
  Lua Script = $Environment{OV_PATH_CONFIG}/p300-speller-target.lua
  Word to Spell (leave this empty if random) = ${word}
  Row Stimulation Base = OVTK_StimulationId_Label_01
  Column Stimulation Base = OVTK_StimulationId_Label_07
  Delay Before Sending (in sec) = 1
Sequence stimulations=#12, Target stimulations=#13, Row selection stimulations=#7.Selected row, Column selection stimulations=#8.Selected col -> P300 Speller Visualization
  Interface filename = ${Path_Data}/plugins/simple-visualization/p300-speller.ui
  Row stimulation base = OVTK_StimulationId_Label_01
  Column stimulation base = OVTK_StimulationId_Label_07
  Flash background color = 5,5,5
  Flash foreground color = 100,100,100
  Flash font size = 60
  No flash background color = 0,0,0
  No flash foreground color = 25,25,25
  No flash font size = 40
  Target background color = 20,20,70
  Target foreground color = 10,10,30
  Target font size = 40
  Selected background color = 10,40,10
  Selected foreground color = 60,100,60
  Selected font size = 40
  0x8d21ff41 = $Environment{OV_PATH_CONFIG}/p300-speller-visualization.cfg
All rows=#7.All rows, All cols=#8.All cols, Target=#13, Stimulations=#9 -> Spelling Accuracy
  Clock frequency (Hz) = 64
  Script = C:/Users/sandr/Desktop/OVScenarios/accuracy_cumavg.py
  Number of flashes = ${num_flash}
  Save to file = ${accuracy_file}
