OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
0x790d75b8 = Jussi T. Lindgren
0x9f5c4075 = Online File Replay
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = ${first_file}
#0.Output Stimulations -> Stimulation Filter => #1
  Default action = Select
  Time range begin = 0
  Time range end = 0
  Action to perform = Reject
  Stimulation range begin = OVTK_StimulationId_ExperimentStop
  Stimulation range end = OVTK_StimulationId_ExperimentStop
Generic stream reader => #2
  Filename = ${second_file}
Input signal 1=#0.Output Signal, Input stimulations 1=#1, Input signal 2=#2.Output Signal, Input stimulations 2=#2.Output Stimulations -> Signal Concatenation => #3
  Time out before assuming end-of-file (in sec) = 1
  End-of-file stimulation for input 1 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 2 = OVTK_StimulationId_ExperimentStop
Input Signal=#3.Signal, Input Stimulations=#3.Stimulations -> Generic stream writer
  Filename = ${concat_file}
  Use compression = false
#3.Status -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
