OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x9f5c4075 = Cumulative Col Sel Python
0xf6b2e3fa = Metabox
Settings
  NumFlashes = 12
  ConfigFile = C:/Users/sandr/OneDrive/Desktop/ov-2.0.0-p300-test-data/p300-speller/p300-classifier.cfg
Input Signal -> #0.Input stream 1
Input Stimulations -> #0.Stims
Output Selected col <- #7.Selected col
Output All cols <- #7.All cols

Identity => #0
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Col 1 => #1
  StimEpoch = OVTK_StimulationId_Label_07
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Col 2 => #2
  StimEpoch = OVTK_StimulationId_Label_08
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Col 3 => #3
  StimEpoch = OVTK_StimulationId_Label_09
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Col 4 => #4
  StimEpoch = OVTK_StimulationId_Label_0A
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Col 5 => #5
  StimEpoch = OVTK_StimulationId_Label_0B
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Col 6 => #6
  StimEpoch = OVTK_StimulationId_Label_0C
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Col 1=#1.Classification, Col 2=#2.Classification, Col 3=#3.Classification, Col 4=#4.Classification, Col 5=#5.Classification, Col 6=#6.Classification, Stims=#0.Output stream 2, Prob 1=#1.Probability, Prob 2=#2.Probability, Prob 3=#3.Probability, Prob 4=#4.Probability, Prob 5=#5.Probability, Prob 6=#6.Probability -> Col Selection => #7
  Clock frequency (Hz) = 64
  Script = C:/Users/sandr/OneDrive - Maynooth University/P300 Experiment/p300-speller-xDAWN/Cumulative average/selection_cumavg.py
  Row = false
  Number of flashes = $var{NumFlashes}
