OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
0x9f5c4075 = Row/Col Class Cumulative Python
0xf6b2e3fa = Metabox
Settings
  StimEpoch = OVTK_StimulationId_Label_01
  NumFlashes = 12
  ConfigFile = C:/Users/sandr/OneDrive/Desktop/ov-2.0.0-p300-test-data/p300-speller/p300-classifier.cfg
Input Signal -> #0.Input stream 1
Input Stimulations -> #0.Input stream 2
Output Classification <- #4.Labels
Output Probability <- #4.Probability values

Identity => #0
Input signal=#0.Output stream 1, Input stimulations=#0.Output stream 2 -> Stimulation based epoching => #1
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation 1 = $var{StimEpoch}
Epochs=#1, Stims=#0.Output stream 2 -> Cumulative Average
  Clock frequency (Hz) = 64
  Script = C:/Users/sandr/OneDrive - Maynooth University/EvasInternship/OpenvibeScenarios/CumulativeAverage/cumavg.py
  Number of flashes = $var{NumFlashes}
  Label = $var{StimEpoch}
-> Feature aggregator => #3
Features=#3 -> Classifier processor => #4
  Filename to load configuration from = $var{ConfigFile}
