OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
0x9f5c4075 = Cumulative Row Sel Python
0xf6b2e3fa = Metabox
Settings
  NumFlashes = 12
  ConfigFile = C:/Users/sandr/OneDrive/Desktop/ov-2.0.0-p300-test-data/p300-speller/p300-classifier.cfg
Input Signal -> #0.Input stream 1
Input Stimulations -> #0.Stims
Output Selected row <- #7.Selected row
Output All rows <- #7.All rows

Identity => #0
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Row 1 => #1
  StimEpoch = OVTK_StimulationId_Label_01
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Row 2 => #2
  StimEpoch = OVTK_StimulationId_Label_02
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Row 3 => #3
  StimEpoch = OVTK_StimulationId_Label_03
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Row 4 => #4
  StimEpoch = OVTK_StimulationId_Label_04
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Row 5 => #5
  StimEpoch = OVTK_StimulationId_Label_05
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Signal=#0.Output stream 1, Stimulations=#0.Output stream 2 -> Row 6 => #6
  StimEpoch = OVTK_StimulationId_Label_06
  NumFlashes = $var{NumFlashes}
  ConfigFile = $var{ConfigFile}
Row 1=#1.Classification, Row 2=#2.Classification, Row 3=#3.Classification, Row 4=#4.Classification, Row 5=#5.Classification, Row 6=#6.Classification, Stims=#0.Output stream 2, Prob 1=#1.Probability, Prob 2=#2.Probability, Prob 3=#3.Probability, Prob 4=#4.Probability, Prob 5=#5.Probability, Prob 6=#6.Probability -> Row Selection => #7
  Clock frequency (Hz) = 64
  Script = C:/Users/sandr/OneDrive - Maynooth University/P300 Experiment/p300-speller-xDAWN/Cumulative average/selection_cumavg.py
  Row = true
  Number of flashes = $var{NumFlashes}
